PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.0.5
  Window size (pixels) = [1600, 900]
  color = white
  expName = ec_RRR
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Routines
  Routine surveillance_trial
    KeyboardComponent learning_phase_response
      allowedKeys = 'space', 'None'
      correctAns = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    ImageComponent learning_phase_image
      image [set every repeat] = $stimulus
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine surveillance_instructions_2
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from numpy.random import randint
        condition_randomisation = randint(1, 3, size = 1)
        if condition_randomisation == 1:
            condition = "CS1_USpos"
        elif condition_randomisation == 2:
            condition = "CS1_USneg"

        #file_name = "trials/trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + ".csv"
      Begin Routine:
        #file_name = "trials/" + block_id + ".csv"
        #file_name = "trials/" + "condition_" + condition + "_" + block_id + ".csv"
        file_name = "trials/trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + "_" + block_id + "_.csv"
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent example
      image [set every repeat] = $example_image
      pos = (0, 0.05)
      size = (0.3, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_top
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_top
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    TextComponent text_instructions_bottom
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_bottom
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  Routine surveillance_instructions_1
    KeyboardComponent key_resp_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $first_instructions_text
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  Routine distractor_1
    RatingScaleComponent distractor_1_rating
      forceEndRoutine = True
      high = 7
      labels = Strong disagreement, Strong agreement
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent distractor_1_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $distractor_1_items
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  Routine distractor_2
    RatingScaleComponent distractor_2_rating
      forceEndRoutine = True
      high = 7
      labels = Strong disagreement, Strong agreement
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent distractor_2_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $distractor_2_items
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Flow
  LoopInitiator surveillance_instructions_loop loopType="TrialHandler"
    conditionsFile = instructions_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('first_instructions_text', 'first instructions text 1')]),
      OrderedDict([('first_instructions_text', 'first instructions text 2')]),
      OrderedDict([('first_instructions_text', 'first instructions text 3')])]
    Routine surveillance_instructions_1
  LoopTerminator surveillance_instructions_loop
  LoopInitiator surveillance_blocks_loop loopType="TrialHandler"
    conditionsFile = instructions_2.xlsx
    loopType = random
    nReps = 1
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    Routine surveillance_instructions_2
    LoopInitiator surveillance_trials_loop loopType="TrialHandler"
      conditionsFile = $file_name
      loopType = sequential
      nReps = 1
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      Routine surveillance_trial
    LoopTerminator surveillance_trials_loop
  LoopTerminator surveillance_blocks_loop
  LoopInitiator distractor_1_loop loopType="TrialHandler"
    conditionsFile = distractor_1.xlsx
    loopType = sequential
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    conditions:
      [OrderedDict([('distractor_1_items', 'I would prefer complex to simple problems.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')]),
      OrderedDict([('distractor_1_items', 'I like to have the responsibility of handling a situation that requires a lot of thinking.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')]),
      OrderedDict([('distractor_1_items', 'Thinking is not my idea of fun.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')]),
      OrderedDict([('distractor_1_items', 'I would rather do something that requires little thought than something that is sure to challenge my thinking abilities.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')])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
    Routine distractor_1
  LoopTerminator distractor_1_loop
  LoopInitiator distractor_2_loop loopType="TrialHandler"
    conditionsFile = distractor_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('distractor_2_items', 'I form opinions about everything.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'I prefer to avoid taking extreme positions.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'It is very important to me to hold strong opinions.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'I want to know exactly what is good and bad about everything.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'I often prefer to remain neutral about complex issues.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')])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
    Routine distractor_2
  LoopTerminator distractor_2_loop
